CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:29
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "dapi") (file does contain "tiff")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "gfp") (file does contain "tiff")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "txred") (file does contain "tiff")
    Name to assign these images:OrigRed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cy5") (file does contain "tiff")
    Name to assign these images:OrigMagenta
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
EnhanceOrSuppressFeatures:[module_num:5|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
    Select the input image:OrigGreen
    Name the output image:EnhancedGreen
    Select the operation:Enhance
    Feature size:60
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:OrigRed
    Name the output image:EnhancedRed
    Select the operation:Enhance
    Feature size:60
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:OrigMagenta
    Name the output image:EnhancedMagenta
    Select the operation:Enhance
    Feature size:60
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:DAPI
    Name the primary objects to be identified:NucleiArea
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:OrigGreen
    Name the primary objects to be identified:GreenArea
    Typical diameter of objects, in pixel units (Min,Max):3,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:OrigRed
    Name the primary objects to be identified:RedArea
    Typical diameter of objects, in pixel units (Min,Max):3,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:OrigMagenta
    Name the primary objects to be identified:MagentaArea
    Typical diameter of objects, in pixel units (Min,Max):3,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
MeasureImageIntensity:[module_num:12|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
    Select images to measure:DAPI, OrigGreen, OrigMagenta, OrigRed
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:GreenArea, MagentaArea, NucleiArea, RedArea
    Calculate custom percentiles:No
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:EnhancedGreen
    Name the primary objects to be identified:Green
    Typical diameter of objects, in pixel units (Min,Max):3,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:EnhancedRed
    Name the primary objects to be identified:Red
    Typical diameter of objects, in pixel units (Min,Max):3,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:EnhancedMagenta
    Name the primary objects to be identified:Magenta
    Typical diameter of objects, in pixel units (Min,Max):3,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:17|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DAPI
    Number of pixels by which to expand the primary objects:30
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
MaskObjects:[module_num:18|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
    Select objects to be masked:Green
    Name the masked objects:MaskedGreen
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cells
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:19|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
    Select objects to be masked:Red
    Name the masked objects:MaskedRed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cells
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:20|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
    Select objects to be masked:Magenta
    Name the masked objects:MaskedMagenta
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Magenta
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:21|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
    Parent objects:Cells
    Child objects:MaskedGreen
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelatedGreen
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
RelateObjects:[module_num:22|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
    Parent objects:Cells
    Child objects:MaskedRed
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelatedRed
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
RelateObjects:[module_num:23|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
    Parent objects:Cells
    Child objects:MaskedMagenta
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelatedMagenta
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
MeasureObjectSizeShape:[module_num:24|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
    Select object sets to measure:RelatedGreen, RelatedMagenta, RelatedRed
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

DisplayHistogram:[module_num:25|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
    Select the object whose measurements will be displayed:Cells
    Select the object measurement to plot:Children_MaskedGreen_Count
    Number of bins:100
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
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    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

DisplayHistogram:[module_num:26|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
    Select the object whose measurements will be displayed:Cells
    Select the object measurement to plot:Children_MaskedRed_Count
    Number of bins:100
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
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    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

DisplayHistogram:[module_num:27|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
    Select the object whose measurements will be displayed:Cells
    Select the object measurement to plot:Children_MaskedMagenta_Count
    Number of bins:100
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
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    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

ExportToSpreadsheet:[module_num:28|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/RNAscope analysis/test data output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MinipumpRNAscope_
    Overwrite existing files without warning?:No
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
CreateBatchFiles:[module_num:29|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/Users/kelsea
    Cluster root path:/Users/kelsea
