CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:28
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Subject>.*)_(?P<Region>.*)_(?P<Section>.*)_(?P<Channel>.*).tiff
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "dapi") (extension does istif)
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "gfp") (extension does istif)
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "txred") (extension does istif)
    Name to assign these images:OrigRed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cy5") (extension does istif)
    Name to assign these images:OrigMagenta
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
EnhanceOrSuppressFeatures:[module_num:5|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
    Select the input image:OrigGreen
    Name the output image:EnhancedGreen
    Select the operation:Enhance
    Feature size:60
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:OrigRed
    Name the output image:EnhancedRed
    Select the operation:Enhance
    Feature size:70
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:OrigMagenta
    Name the output image:EnhancedMagenta
    Select the operation:Enhance
    Feature size:70
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:DAPI
    Name the primary objects to be identified:NucleiArea
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:OrigGreen
    Name the primary objects to be identified:GreenArea
    Typical diameter of objects, in pixel units (Min,Max):3,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:OrigRed
    Name the primary objects to be identified:RedArea
    Typical diameter of objects, in pixel units (Min,Max):3,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:OrigMagenta
    Name the primary objects to be identified:MagentaArea
    Typical diameter of objects, in pixel units (Min,Max):3,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureImageIntensity:[module_num:12|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
    Select images to measure:DAPI, OrigGreen, OrigMagenta, OrigRed
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:GreenArea, MagentaArea, NucleiArea, RedArea
    Calculate custom percentiles:No
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:EnhancedGreen
    Name the primary objects to be identified:Green
    Typical diameter of objects, in pixel units (Min,Max):3,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Intensity_MedianIntensity_OrigGreen_GreenArea
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
IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:EnhancedRed
    Name the primary objects to be identified:Red
    Typical diameter of objects, in pixel units (Min,Max):3,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Intensity_MedianIntensity_OrigRed_GreenArea
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
IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:EnhancedMagenta
    Name the primary objects to be identified:Magenta
    Typical diameter of objects, in pixel units (Min,Max):3,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Intensity_MedianIntensity_OrigMagenta_GreenArea
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
IdentifySecondaryObjects:[module_num:17|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DAPI
    Number of pixels by which to expand the primary objects:30
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
MaskObjects:[module_num:18|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
    Select objects to be masked:Green
    Name the masked objects:MaskedGreen
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cells
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:19|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
    Select objects to be masked:Red
    Name the masked objects:MaskedRed
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cells
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:20|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
    Select objects to be masked:Magenta
    Name the masked objects:MaskedMagenta
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Magenta
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:21|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
    Parent objects:Cells
    Child objects:MaskedGreen
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelatedGreen
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
RelateObjects:[module_num:22|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
    Parent objects:Cells
    Child objects:MaskedRed
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelatedRed
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
RelateObjects:[module_num:23|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
    Parent objects:Cells
    Child objects:MaskedMagenta
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelatedMagenta
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
MeasureObjectSizeShape:[module_num:24|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
    Select object sets to measure:RelatedGreen, RelatedMagenta, RelatedRed
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

DisplayHistogram:[module_num:25|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
    Select the object whose measurements will be displayed:Cells
    Select the object measurement to plot:Children_MaskedGreen_Count
    Number of bins:100
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
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    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

DisplayHistogram:[module_num:26|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
    Select the object whose measurements will be displayed:Cells
    Select the object measurement to plot:Children_MaskedRed_Count
    Number of bins:100
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
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    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

DisplayHistogram:[module_num:27|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
    Select the object whose measurements will be displayed:Cells
    Select the object measurement to plot:Children_MaskedMagenta_Count
    Number of bins:100
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
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    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

ExportToSpreadsheet:[module_num:28|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|/output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:\g<Subject>_\g<Region>_\g<Section>_Image.csv
    Use the object name for the file name?:No
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
    File name:\g<Subject>_\g<Region>_\g<Section>_Experiment.csv
    Use the object name for the file name?:No
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
    File name:\g<Subject>_\g<Region>_\g<Section>_Object_relationships.csv
    Use the object name for the file name?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:\g<Subject>_\g<Region>_\g<Section>_Cells.csv
    Use the object name for the file name?:No
    Data to export:Green
    Combine these object measurements with those of the previous object?:No
    File name:\g<Subject>_\g<Region>_\g<Section>_Green.csv
    Use the object name for the file name?:No
    Data to export:GreenArea
    Combine these object measurements with those of the previous object?:No
    File name:\g<Subject>_\g<Region>_\g<Section>_GreenArea.csv
    Use the object name for the file name?:No
    Data to export:Magenta
    Combine these object measurements with those of the previous object?:No
    File name:\g<Subject>_\g<Region>_\g<Section>_Magenta.csv
    Use the object name for the file name?:No
    Data to export:MagentaArea
    Combine these object measurements with those of the previous object?:No
    File name:\g<Subject>_\g<Region>_\g<Section>_MagentaArea.csv
    Use the object name for the file name?:No
    Data to export:MaskedGreen
    Combine these object measurements with those of the previous object?:No
    File name:\g<Subject>_\g<Region>_\g<Section>_MaskedGreen.csv
    Use the object name for the file name?:No
    Data to export:MaskedMagenta
    Combine these object measurements with those of the previous object?:No
    File name:\g<Subject>_\g<Region>_\g<Section>_MaskedMagenta.csv
    Use the object name for the file name?:No
    Data to export:MaskedRed
    Combine these object measurements with those of the previous object?:No
    File name:\g<Subject>_\g<Region>_\g<Section>_MaskedRed.csv
    Use the object name for the file name?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:\g<Subject>_\g<Region>_\g<Section>_Nuclei.csv
    Use the object name for the file name?:No
    Data to export:NucleiArea
    Combine these object measurements with those of the previous object?:No
    File name:\g<Subject>_\g<Region>_\g<Section>_NucleiArea.csv
    Use the object name for the file name?:No
    Data to export:Red
    Combine these object measurements with those of the previous object?:No
    File name:\g<Subject>_\g<Region>_\g<Section>_Red.csv
    Use the object name for the file name?:No
    Data to export:RedArea
    Combine these object measurements with those of the previous object?:No
    File name:\g<Subject>_\g<Region>_\g<Section>_RedArea.csv
    Use the object name for the file name?:No
    Data to export:RelatedGreen
    Combine these object measurements with those of the previous object?:No
    File name:\g<Subject>_\g<Region>_\g<Section>_RelatedGreen.csv
    Use the object name for the file name?:No
    Data to export:RelatedMagenta
    Combine these object measurements with those of the previous object?:No
    File name:\g<Subject>_\g<Region>_\g<Section>_RelatedMagenta.csv
    Use the object name for the file name?:No
    Data to export:RelatedRed
    Combine these object measurements with those of the previous object?:No
    File name:\g<Subject>_\g<Region>_\g<Section>_RelatedRed.csv
    Use the object name for the file name?:No
