CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:28
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Subject>.*)_(?P<Region>.*)_(?P<Section>.*)_(?P<Channel>.*).tiff
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "dapi") (extension does istif)
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "gfp") (extension does istif)
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "txred") (extension does istif)
    Name to assign these images:OrigRed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cy5") (extension does istif)
    Name to assign these images:OrigMagenta
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
EnhanceOrSuppressFeatures:[module_num:5|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
    Select the input image:OrigGreen
    Name the output image:EnhancedGreen
    Select the operation:Enhance
    Feature size:60
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:OrigRed
    Name the output image:EnhancedRed
    Select the operation:Enhance
    Feature size:60
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:OrigMagenta
    Name the output image:EnhancedMagenta
    Select the operation:Enhance
    Feature size:60
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:DAPI
    Name the primary objects to be identified:NucleiArea
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:OrigGreen
    Name the primary objects to be identified:GreenArea
    Typical diameter of objects, in pixel units (Min,Max):3,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:OrigRed
    Name the primary objects to be identified:RedArea
    Typical diameter of objects, in pixel units (Min,Max):3,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:OrigMagenta
    Name the primary objects to be identified:MagentaArea
    Typical diameter of objects, in pixel units (Min,Max):3,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
MeasureImageIntensity:[module_num:12|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
    Select images to measure:DAPI, OrigGreen, OrigMagenta, OrigRed
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:GreenArea, MagentaArea, NucleiArea, RedArea
    Calculate custom percentiles:No
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:EnhancedGreen
    Name the primary objects to be identified:Green
    Typical diameter of objects, in pixel units (Min,Max):3,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:EnhancedRed
    Name the primary objects to be identified:Red
    Typical diameter of objects, in pixel units (Min,Max):3,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Intensity_MedianIntensity_OrigRed_GreenArea
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
IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:EnhancedMagenta
    Name the primary objects to be identified:Magenta
    Typical diameter of objects, in pixel units (Min,Max):3,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Intensity_MedianIntensity_OrigMagenta_GreenArea
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
IdentifySecondaryObjects:[module_num:17|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DAPI
    Number of pixels by which to expand the primary objects:30
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
RelateObjects:[module_num:18|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
    Parent objects:Cells
    Child objects:Green
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:19|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
    Parent objects:Cells
    Child objects:Red
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:20|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
    Parent objects:Cells
    Child objects:Magenta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:21|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
    Select the objects to filter:Cells
    Name the output objects:GreenCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_Green_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:3
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:22|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
    Select the objects to filter:Cells
    Name the output objects:RedCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_Red_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:3
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:23|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
    Select the objects to filter:Cells
    Name the output objects:MagentaCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_Magenta_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:3
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:24|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
    Parent objects:GreenCells
    Child objects:Green
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:25|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
    Parent objects:RedCells
    Child objects:Red
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:26|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
    Parent objects:MagentaCells
    Child objects:Magenta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectSizeShape:[module_num:27|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
    Select object sets to measure:Green, Red
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:28|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/RNAscope analysis/test data output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MinipumpRNAscope_
    Overwrite existing files without warning?:No
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